<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">C:/Data/</directory>

  <!-- The setup name -->
  <setup_name type="string">scope4</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">classic</ui_type>

  <!--
      This has two effects:

      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.

      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">False</strict>

  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
      <class_name type="string">HalController</class_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">ramp.ctbl</colortable>

      </parameters>
    </display>

    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
	<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
	<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
	<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

	<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
		<obj1 desc="Objective 1" type="custom">60x,0.180,0.0,0.0</obj1>      <!-- Measure these with a slide-ruler -->
		<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
	<time_base type="string">camera1</time_base>
      </parameters>
    </timing>

    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..

	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
    -->

   <!-- camera_id = FLIR/Pt Camera Grey Serial Num  -->
    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
		<master type="boolean">True</master>
		<class_name type="string">PointGreyCameraControl</class_name>
		<module_name type="string">storm_control.hal4000.camera.pointgreyCameraControl</module_name>
		<parameters>
		  <camera_id type="string">19037109</camera_id>
		  
		  <presets>
				<!-- FLIR camera general properties -->
				<PixelFormat type="string">Mono16</PixelFormat> <!-- Mono12Packed/Mono12p -->
				<ExposureAuto type="string">Off</ExposureAuto>
				<GainAuto type="string">Off</GainAuto>
				<BlackLevelClampingEnable type="boolean">False</BlackLevelClampingEnable>
				
				<!-- Grasshopper specific properties --> 
				<VideoMode type="string">Mode7</VideoMode>   
				<pgrDefectPixelCorrectionEnable type="boolean">False</pgrDefectPixelCorrectionEnable>
				<AcquisitionFrameRateAuto type="string">Off</AcquisitionFrameRateAuto>
				<pgrExposureCompensationAuto type="string">Off</pgrExposureCompensationAuto>
				<GammaEnabled type="boolean">False</GammaEnabled>
				<OnBoardColorProcessEnabled type="boolean">False</OnBoardColorProcessEnabled>

				<!-- Properties to control relationship between exposure and frame rate -->
				<CameraControlExposure type="boolean">True</CameraControlExposure>				
		  </presets>
		  
		  <!--
	      What value to use for Trigger Activation, 'RisingEdge' or
	      'FallingEdge'. 'FallingEdge' is the default if not specified.	
			-->
		  <trigger_activation type="string">RisingEdge</trigger_activation>	
	  
		  <!-- These are the display defaults, not the camera range. -->
		  <default_max type="int">200</default_max> 
		  <default_min type="int">30</default_min>
		  <flip_horizontal type="boolean">False</flip_horizontal>
		  <flip_vertical type="boolean">False</flip_vertical>
		  <transpose type="boolean">True</transpose>
		  
		  <extension type="string"></extension>	  
		  <saved type="boolean">True</saved>
		</parameters>
      </camera>
    </camera1>

    
   <!-- DAQ control -->
    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>

      <configuration>
	<!-- This is the default timing source to use while filming. "Oversampled"
	     films will use the counter for timing. The counter is driven by the
	     camera fire pin. Other films will just use the camera fire pin directly.
		 rising_edge specifies whether the counter is incremented upon the 
		 rising (True) or falling (False) edge of the camera signal
	-->
        <timing>
          <camera_fire_pin type="string">/Dev1/PFI8</camera_fire_pin>
          <counter type="string">/Dev1/ctr0</counter>
          <rising_edge type="boolean">False</rising_edge>   <!-- falling edge -->
        </timing>
        
        <!-- These are the things that we provide DAQ functionality for.
             Other modules will request them with a 'get functionality'
             message and "name" = "daq.xxx.yyy". -->
        <ilm750>
          <do_task>
            <source type="string">/Dev1/port0/line4</source>
          </do_task>
        </ilm750>

        <ilm647>
          <do_task>
            <source type="string">/Dev1/port0/line3</source>
          </do_task>      
        </ilm647>

        <ilm561>
          <do_task>
            <source type="string">/Dev1/port0/line2</source>
          </do_task>
        </ilm561>

        <ilm488>
          <do_task>
            <source type="string">/Dev1/port0/line1</source>
          </do_task>
        </ilm488>

        <ilm405>
          <do_task>
            <source type="string">/Dev1/port0/line0</source>
          </do_task>
        </ilm405>   

        <mcl>
          <ao_task>
            <source type="string">/Dev1/ao1</source>
          </ao_task>
        </mcl>        
      </configuration>
    </daq>



    <!-- Focus lock control GUI. -->
    <focuslock>
      <class_name type="string">FocusLock</class_name>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <configuration>
	<ir_laser type="string">none_irlaser</ir_laser>
	<ir_power type="int">10</ir_power>
	<lock_modes type="string">NoLockMode,AutoLockMode,AlwaysOnLockMode,OptimalLockMode,CalibrationLockMode</lock_modes>
	<qpd type="string">uc480_camera</qpd>
	<z_stage type="string">mcl_zstage</z_stage>
	<parameters>
	  <find_sum>
	    <step_size type="float">1.0</step_size>
	  </find_sum>
	  <locked>
	    <buffer_length type="int">5</buffer_length>
	    <offset_threshold type="float">20.0</offset_threshold>
	  </locked>
	  <jump_size type="float">0.1</jump_size>
	</parameters>
      </configuration>
    </focuslock>

 
   <!-- XY Stage control GUI -->
    <stage>
      <class_name type="string">Stage</class_name>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>  
      <configuration>
		<stage_functionality type="string">apt_stage</stage_functionality>   <!--none_stage  asi_stage apt_stage  pi_controller.xy_stage pi_stage -->
      </configuration>
    </stage>
	
	
	  <!-- ASI stage
    <asi_stage>
      <module_name type="string">storm_control.sc_hardware.appliedScientificInstrumentation.illuminaStageModule</module_name>
      <class_name type="string">AsiStageRS232</class_name>     
      <configuration>	
          <com_port type="string">COM7</com_port> 
      </configuration>
    </asi_stage>
     -->
	   <!-- Thorlabs MLS203 APT stage  --> 
    <apt_stage>
      <module_name type="string">storm_control.sc_hardware.thorlabs.APTcontrollerModule</module_name>
      <class_name type="string">APTcontrollerStage</class_name>     
      <configuration>	
        <xStageSN type="int">94832870</xStageSN>
        <yStageSN type="int">94832869</yStageSN> 
      </configuration> 
    </apt_stage>   
	
      <!-- Thorlabs APT stage  
    <apt_stage>
      <module_name type="string">storm_control.sc_hardware.thorlabs.APTcontrollerModule</module_name>
      <class_name type="string">APTcontrollerStage</class_name>     
      <configuration>	
        <xStageSN type="int">27003853</xStageSN>
        <yStageSN type="int">27003868</yStageSN> 
      </configuration> 
    </apt_stage>   
	--> 
 
      <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>
        <!-- Note: The name of the channel is the gui_name.
             XML tags cannot start with numbers. -->
        <ch1>
          <gui_name type="string">750</gui_name>
          <color type="string">140,0,0</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor750</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm750.do_task</hw_fn_name>
          </digital_modulation>
        </ch1>
        <ch2>
          <gui_name type="string">635</gui_name>
          <color type="string">255,0,0</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor647</hw_fn_name>
          </amplitude_modulation> 
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm647.do_task</hw_fn_name>
          </digital_modulation>
        </ch2>
        <ch3>
          <gui_name type="string">545</gui_name>
          <color type="string">55,255,0</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor561</hw_fn_name>
          </amplitude_modulation>  
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm561.do_task</hw_fn_name>
          </digital_modulation>
        </ch3>
        <ch4>
          <gui_name type="string">473</gui_name>
          <color type="string">0,200,255</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor488</hw_fn_name>
          </amplitude_modulation>      
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm488.do_task</hw_fn_name>
          </digital_modulation>
        </ch4>
        <ch5>
          <gui_name type="string">408</gui_name>
          <color type="string">225,0,255</color>
          <amplitude_modulation>
            <hw_fn_name>Lumencor405</hw_fn_name>
          </amplitude_modulation>
          <digital_modulation>
            <hw_fn_name type="string">daq.ilm405.do_task</hw_fn_name>
          </digital_modulation>
        </ch5>
      </configuration>
    </illumination>

    <!-- Lumencor 405 laser control. -->
    <Lumencor405>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">0</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor405>
    
    <Lumencor488>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">2</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor488>
    
    <Lumencor561>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">4</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor561>
    
    <Lumencor647>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">5</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor647>
    
    <Lumencor750>
      <module_name type="string">storm_control.sc_hardware.lumencor.LumencorModule</module_name>
      <class_name type="string">Celesta</class_name>
      <configuration>
    <ip type="string">192.168.201.200</ip>
    <laser_id type="int">6</laser_id>
    <used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </Lumencor750>
    <!-- end of illumination configuration -->
      
    <none_irlaser>
      <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
      <class_name type="string">NoneIRLaserModule</class_name>
    </none_irlaser>
    
    
   <!-- Thorlabs LDC control for IR laser
    <ldc_irlaser>
      <module_name type="string">storm_control.sc_hardware.thorlabs.LDCModule</module_name>
      <class_name type="string">LDCIRLaserModule</class_name>

      <configuration>
	<ct_fn_name type="string">daq.ir_laser.ct_task</ct_fn_name>
      </configuration>
    </ldc_irlaser>
    -->
    

    <!-- Mad City Labs Z piezo -->
    <mcl_zstage>
      <module_name type="string">storm_control.sc_hardware.madCityLabs.mclVoltageZModule</module_name>
      <class_name type="string">MCLVoltageZ</class_name> 
      <configuration>
        <parameters>
          <center type="float">100.0</center>
          <has_center_bar type="boolean">True</has_center_bar>
          <maximum type="float">200.0</maximum>
          <minimum type="float">0.0</minimum>
          <warning_high type="float">180.0</warning_high>
          <warning_low type="float">20.0</warning_low>
        </parameters>
        <ao_fn_name type="string">daq.mcl.ao_task</ao_fn_name>
        <microns_to_volts type="float">0.05</microns_to_volts> <!-- was 0.1 for MCL -->
      </configuration>
    </mcl_zstage>
    
  

      <!-- Thorlabs UC480 camera for the focus lock -->
    <uc480_camera>
      <class_name type="string">UC480Camera</class_name>
      <module_name type="string">storm_control.sc_hardware.thorlabs.uc480CameraModule</module_name>
      <configuration>
        <parameters>
          <offset_has_center_bar type="boolean">True</offset_has_center_bar>
          <offset_maximum type="float">10.0</offset_maximum> <!-- 1.0 -->
          <offset_minimum type="float">0</offset_minimum> <!-- 1.0 -->
          <offset_warning_high type="float">9.5</offset_warning_high> <!-- 1.0 -->
          <offset_warning_low type="float">.5</offset_warning_low> <!-- 1.0 -->
          <sum_maximum type="float">100000.0</sum_maximum>
          <sum_minimum type="float">50.0</sum_minimum>
          <sum_warning_low type="float">10000.0</sum_warning_low>
        </parameters>
        <background type="int">120000</background>
        <camera_id type="int">1</camera_id>
        <ini_file type="string">uc480_settings.ini</ini_file>
        <offset_file type="string">c:/MicroscopeSettings/camoffsets_scope4.txt</offset_file>
        <pixel_clock type="int">25</pixel_clock>
        <sigma type="float">8</sigma>
        <uc480_dll type="string">c:/windows/system32/uc480_64.dll</uc480_dll>
        <use_storm_analysis type="boolean">False</use_storm_analysis>
        <x_width type="int">600</x_width>
        <y_width type="int">600</y_width>
        <units_to_microns type="float">-0.05</units_to_microns>
      </configuration>
    </uc480_camera>	

    <!-- Progression control GUI -->
    <progressions>
      <module_name type="string">storm_control.hal4000.progressions.progressions</module_name>
      <class_name type="string">Progressions</class_name>
      <configuration>
	<illumination_functionality type="string">illumination</illumination_functionality>

	<frames type="int">100</frames>
	<increment type="float">0.01</increment>
	<starting_value type="float">0.1</starting_value>
      </configuration>
    </progressions>

    <!-- sCMOS calibration module -->
    <scmos_cal>
      <module_name type="string">storm_control.hal4000.miscControl.scmosCalibration</module_name>
      <class_name type="string">SCMOSCalibration</class_name>
    </scmos_cal>

    <!-- Spot counter and GUI -->
    <spotcounter>
      <module_name type="string">storm_control.hal4000.spotCounter.spotCounter</module_name>
      <class_name type="string">SpotCounter</class_name>
      <configuration>
	<max_threads type="int">4</max_threads>
	<max_size type="int">263000</max_size>
      </configuration>
    </spotcounter>

  

    <!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>
      <configuration>
	<parallel_mode type="boolean">True</parallel_mode>
	<tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>

  </modules>

</config>
